OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.0.1)
0x790d75b8 = Nick Carey
0x9f5c4075 = TrainingDataAquisition
Comment
  Figuring out how to specify targets to the P300 Identifier Stimulator.

  Clock Stimulator repeatedly blasting a stim to P300 Identifier Stimulator seems to work.
  Stimulator identifies the incoming stim as a target stim and refrains from passing it on
  until it wants to show a targtet. Could extend to a clock stims per target and merge into
  P300 Identifier Stimulator. But perhaps more elegant solution than this?

  Lua Stimulator doesnt seem to be working as intended. Ideally this box would blast
  target stims to P300 Identifier Stimulator once and be done, however something isnt
  clicking. Need to try delaying execution of this box til after Launch

Launch => #0
  Lua Script = ${Player_ScenarioDirectory}/TrainingConfig/p300-HiddenCube-training-launch.lua
  Stimulation To Send = OVTK_StimulationId_Label_00
  Time To Send = 10
Clock stimulator => #1
  Interstimulation interval (in sec) = 5
  Stimulation = OVTK_StimulationId_Label_01
Clock stimulator => #2
  Interstimulation interval (in sec) = 15
  Stimulation = OVTK_StimulationId_Label_02
Input stimulations 1=#1, Input stimulations 2=#2 -> Stimulation multiplexer => #3
Incoming stimulations=#0, Target Stimulations=#3 -> P300 Identifier Stimulator
  Start stimulation = OVTK_StimulationId_Label_00
  Stimulation base = OVTK_StimulationId_Label_01
  Number of identifiable objects = 6
  Percent of repetitions containing the target = 10
  Number of repetitions = 100
  Number of trials = 5
  Flash duration (in sec) = 0.125
  No flash duration (in sec) = 0.125
  Inter-repetition delay (in sec) = 2
  Inter-trial delay (in sec) = 5
-> Display cue image
  Display images in full screen = false
  Scale images to fit = false
  Clear screen Stimulation = OVTK_StimulationId_VisualStimulationStop
  Cue Image 1 = D:/Workspace/HiddenCubeImages_Lalit/Target/01.png
  Stimulation 1 = OVTK_StimulationId_Label_01
  Cue Image 2 = D:/Workspace/HiddenCubeImages_Lalit/Target/02.png
  Stimulation 2 = OVTK_StimulationId_Label_02
  Cue Image 3 = D:/Workspace/HiddenCubeImages_Lalit/Target/03.png
  Stimulation 3 = OVTK_StimulationId_Label_03
  Cue Image 4 = D:/Workspace/HiddenCubeImages_Lalit/Target/04.png
  Stimulation 4 = OVTK_StimulationId_Label_04
  Cue Image 5 = D:/Workspace/HiddenCubeImages_Lalit/Target/05.png
  Stimulation 5 = OVTK_StimulationId_Label_05
  Cue Image 6 = D:/Workspace/HiddenCubeImages_Lalit/Target/06.png
  Stimulation 6 = OVTK_StimulationId_Label_06
  0x8d21ff41 = ${Player_ScenarioDirectory}/TrainingConfig/TrainingSetVisualizationConfig.txt

Target Stimulations
  Lua Script = ${Player_ScenarioDirectory}/TrainingConfig/p300-training-target-stimcodes.lua
  Target Stim 1 = OVTK_StimulationId_Label_01
  Time Til Send = 15
  Target Stim 2 = OVTK_StimulationId_Label_02

0x341d3912 Acquisition client => #7
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Input Signal=#7.Signal stream, Input Stimulations=#7.Stimulations -> 0x341d3912 Generic stream writer
  Filename = ${Player_ScenarioDirectory}/TrainingSignals/trainingAquisition.ov
  Use compression = false
#7.Stimulations -> 0x341d3912 Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
