OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.0.1)
0x790d75b8 = Yann Renard
0x9f5c4075 = LDA Classifier Trainer
0xf36a1567 = http://openvibe.inria.fr/p300-speller-xdawn/
0xf6b2e3fa = xDAWN P300 Speller
0xf8034a49 = INRIA
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  Overview

  This scenario should be used to train
  the LDA classifier.

  Just configure the Generic Stream Reader
  box to point to the last file you recorded with
  scenario 1-acquisition and fast forward
  this scenario.

  At the end of the training, you will have an estimation
  of the classifier performance printed in the console.
  If this performance is lower than 70%, just run a new
  4-online session to have better results.

  Note: in order to run this scenario,
  the spatial filter should have been trained using
  2-train-xDAWN !
Comment
  The preprocessing of the signal is
  performed here...

  Note: be sure that the
  sampling rate and sample count
  per buffer you use in the acquisition
  server are compatible with the actual
  signal decimation factor

Generic stream reader => #0
  Filename = ${Player_ScenarioDirectory}/TrainingSignals/trainingAquisitionLong.ov
#0.Output stream 2 -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 20.000000
  Pass band ripple (dB) = 0.500000
-> Signal Decimation
  Decimation factor = 2
-> xDAWN Spatial Filter => #3
  Spatial Filter Coefficients = 9.970221e-001 -3.729500e-002 -1.177390e-002 2.814447e-002 -3.772446e-003 3.371324e-002 -5.480030e-003 8.893039e-003 -1.565213e-002 -9.956694e-003 -2.347757e-002 -2.312669e-003 -1.847227e-002 -7.550644e-004 -8.423513e-003 3.243223e-002 2.079848e-002 5.079737e-001 -2.835127e-002 8.259231e-002 -3.621803e-001 -2.004259e-001 -2.432480e-001 -1.861558e-001 -3.798139e-001 9.614762e-002 3.407766e-001 -2.158597e-001 3.720552e-001 7.500469e-002 -8.628774e-002 -3.182367e-002 5.923482e-002 4.124707e-001 2.083913e-001 -2.629501e-001 2.023081e-001 -2.658446e-001 4.022738e-001 -1.785569e-001 4.450742e-001 3.549239e-001 1.550204e-002 3.750389e-002 3.114249e-002 9.273764e-002 -7.093797e-002 -2.610929e-001
  Number of Output Channels = 3
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-spatial-filter.cfg
Input signal=#3, Input stimulations=#0.Output stream 3 -> Stimulation based epoching "Target Selection"
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_08
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator => #6
Input signal=#3, Input stimulations=#0.Output stream 3 -> Stimulation based epoching "Non Target Selection"
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_01
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator => #9
Input signal=#3, Input stimulations=#0.Output stream 3 -> Stimulation based epoching "Non Target Selection"
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_02
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator => #12
Input signal=#3, Input stimulations=#0.Output stream 3 -> Stimulation based epoching "Non Target Selection"
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_03
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator => #15
Input signal=#3, Input stimulations=#0.Output stream 3 -> Stimulation based epoching "Non Target Selection"
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_04
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator => #18
Input signal=#3, Input stimulations=#0.Output stream 3 -> Stimulation based epoching "Non Target Selection"
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_05
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator => #21
Input signal=#3, Input stimulations=#0.Output stream 3 -> Stimulation based epoching "Non Target Selection"
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_06
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator => #24
Input signal=#3, Input stimulations=#0.Output stream 3 -> Stimulation based epoching "Non Target Selection"
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_07
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator => #27
Input stream 1=#9, Input stream 2=#12, Input stream 3=#15, Input stream 4=#18, Input stream 5=#21, Input stream 6=#24, Input stream 7=#27 -> Streamed matrix multiplexer => #28
Stimulations=#0.Output stream 3, Features for class 1=#6, Features for class 2=#28 -> Classifier trainer
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = ${Player_ScenarioDirectory}/p300-classifier.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 5
  Balance classes = false
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
