OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.0.1)
0x790d75b8 = Jussi T. Lindgren
0x9f5c4075 = Online Use
0xf36a1567 = http://openvibe.inria.fr/p300-speller-xdawn/
0xf6b2e3fa = xDAWN P300 Speller
0xf8034a49 = INRIA
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  The preprocessing of the signal is
  performed here...

  Note: be sure that the
  sampling rate and sample count
  per buffer you use in the acquisition
  server are compatible with the actual
  signal decimation factor
Comment
  For some reason it pauses every iteration. Find out why

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "!ACC0;ACC1;ACC2;Packet Counter;Trigger" => #1
  Channel List = ACC0;ACC1;ACC2;Packet Counter;Trigger
  Action = Reject
  Channel Matching Method = Smart
Input stream 1=#0.Experiment information, Input stream 2=#1, Input stream 3=#0.Stimulations -> Identity => #2
#2.Output stream 2 -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 30.000000
  Pass band ripple (dB) = 0.500000
-> Signal Decimation
  Decimation factor = 2
-> xDAWN Spatial Filter => #5
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-spatial-filter.cfg
Input signal=#5, Input stimulations=#2.Output stream 3 -> Stimulation based epoching
  Epoch duration (in sec) = 0.6
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_VisualStimulationStart
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator => #8
Features=#8 -> Classifier processor => #9
  Filename to load configuration from = ${Player_ScenarioDirectory}/p300-classifier.cfg
Input stream 1=#2.Output stream 1, Input stream 2=#2.Output stream 2, Input stream 3=#2.Output stream 3 -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/OnlineSignals/p300-xdawn-hiddencube-online-[$core{date}-$core{time}].ov
  Use compression = false
#2.Output stream 3 -> Identity => #11
New input[0]=#9.Labels, New input[1]=#11 -> P300 accumulator
  Lua Script = D:/Workspace/PULSD/OpenVibe-HiddenCube/OpenVibeScenario/OnlineConfig/p300-HiddenCube-accumulator.lua
  Image Stimulation Base = OVTK_StimulationId_Label_01
  Number of Images per Trial = 20
  Segment start = OVTK_StimulationId_TrialStart
  Segment stop = OVTK_StimulationId_TrialStop
  Votes buffer file location = ${Player_ScenarioDirectory}/../buffers/CurrentImages/votes.txt
#11 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Pause

File Que Launch => #14
  Lua Script = ${Player_ScenarioDirectory}/OnlineConfig/p300-HiddenCube-FileQue-launch.lua
  Stimulation to send = OVTK_StimulationId_Label_00
  Time to send = 5
  Que File = ${Player_ScenarioDirectory}/../buffers/CurrentImages/isImageSetReady.txt
Incoming stimulations=#14 -> P300 Identifier Stimulator
  Start stimulation = OVTK_StimulationId_Label_00
  Stimulation base = OVTK_StimulationId_Label_01
  Number of identifiable objects = 20
  Percent of repetitions containing the target = 100
  Number of repetitions = 2
  Number of trials = 1
  Flash duration (in sec) = 0.25
  No flash duration (in sec) = 0.05
  Inter-repetition delay (in sec) = 2
  Inter-trial delay (in sec) = 5
-> Display cue image
  Display images in full screen = false
  Scale images to fit = false
  Clear screen Stimulation = OVTK_StimulationId_VisualStimulationStop
  Cue Image 1 = ${Player_ScenarioDirectory}/../buffers/TrainingImages/Distractors/01.png
  Stimulation 1 = OVTK_StimulationId_Label_01
  Cue Image 2 = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/02.png
  Stimulation 2 = OVTK_StimulationId_Label_02
  Cue Image 3 = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/03.png
  Stimulation 3 = OVTK_StimulationId_Label_03
  Cue Image 4 = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/04.png
  Stimulation 4 = OVTK_StimulationId_Label_04
  Cue Image 5 = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/05.png
  Stimulation 5 = OVTK_StimulationId_Label_05
  Cue Image 6 = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/06.png
  Stimulation 6 = OVTK_StimulationId_Label_06
  Cue Image 7 = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/07.png
  Stimulation 7 = OVTK_StimulationId_Label_07
  Cue Image 8 = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/08.png
  Stimulation 8 = OVTK_StimulationId_Label_08
  Cue Image 9 = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/09.png
  Stimulation 9 = OVTK_StimulationId_Label_09
  Cue Image 10 = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/10.png
  Stimulation 10 = OVTK_StimulationId_Label_0A
  Cue Image 11 = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/11.png
  Stimulation 11 = OVTK_StimulationId_Label_0B
  Cue Image 12 = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/12.png
  Stimulation 12 = OVTK_StimulationId_Label_0C
  Cue Image 13 = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/13.png
  Stimulation 13 = OVTK_StimulationId_Label_0D
  Cue Image 14 = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/14.png
  Stimulation 14 = OVTK_StimulationId_Label_0E
  Cue Image 15 = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/15.png
  Stimulation 15 = OVTK_StimulationId_Label_0F
  Cue Image 16 = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/16.png
  Stimulation 16 = OVTK_StimulationId_Label_10
  Cue Image 17 = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/17.png
  Stimulation 17 = OVTK_StimulationId_Label_11
  Cue Image 18 = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/18.png
  Stimulation 18 = OVTK_StimulationId_Label_12
  Cue Image 19 = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/19.png
  Stimulation 19 = OVTK_StimulationId_Label_13
  Cue Image 20 = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/20.png
  Stimulation 20 = OVTK_StimulationId_Label_14
  0x8d21ff41 = ${Player_ScenarioDirectory}/OnlineConfig/OnlineCueImgConfig.txt
